CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"C": "integer", "ChannelName": "integer", "ColorFormat": "text", "FileLocation": "text", "Frame": "text", "Plate": "text", "Series": "text", "Site": "text", "SizeC": "text", "SizeT": "text", "SizeX": "text", "SizeY": "text", "SizeZ": "text", "T": "integer", "Well": "text", "Z": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does T "0")
    Name to assign these images:image
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does T "1")
    Name to assign these images:background
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does T "2")
    Name to assign these images:nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does T "3")
    Name to assign these images:border
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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enabled:False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
    Select the input image:border
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
GrayToColor:[module_num:6|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:background
    Select the image to be colored green:border
    Select the image to be colored blue:nuclei
    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:nuclei_and_border
    Image or measurement?:Image
    Select the first image:background
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:8|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
    Select the input image:image
    Name the output image:image_rescale
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:nuclei
    Name the primary objects to be identified:nuclei_objects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:nuclei_objects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:nuclei_and_border
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:FilteredNuclei
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:image
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_instance
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveCroppedObjects:[module_num:13|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enabled:False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
    Objects:IdentifySecondaryObjects
    Directory:Default Output Folder
    Saved file format:8-bit tiff
    Do you want to save cropped images or object masks?:Masks
    Image:None

SplitOrMergeObjects:[module_num:14|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enabled:False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
    Select the input objects:nuclei_objects
    Name the new objects:RelabeledNuclei
    Operation:Merge
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    Merging method:Per-parent
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    Output object type:Disconnected

MeasureColocalization:[module_num:15|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enabled:False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
    Select images to measure:image_rescale
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureImageAreaOccupied:[module_num:16|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
    Measure the area occupied by:Objects
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    Select object sets to measure:FilteredNuclei

MeasureImageSkeleton:[module_num:17|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enabled:False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
    Select an image to measure:image_rescale

MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:FilteredNuclei
    Select neighboring objects to measure:nuclei_objects
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectOverlap:[module_num:19|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enabled:False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
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureObjectSizeShape:[module_num:20|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
    Select object sets to measure:FilteredNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectSizeShape:[module_num:21|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enabled:False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
    Select object sets to measure:FilteredNuclei, IdentifySecondaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectSkeleton:[module_num:22|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enabled:False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
    Select the seed objects:FilteredNuclei
    Select the skeletonized image:image
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:FilteredNuclei|AreaShape_SpatialMoment_2_0,FilteredNuclei|AreaShape_SpatialMoment_2_2,FilteredNuclei|AreaShape_SpatialMoment_2_1,FilteredNuclei|AreaShape_SpatialMoment_2_3,FilteredNuclei|AreaShape_SpatialMoment_0_3,FilteredNuclei|AreaShape_SpatialMoment_0_2,FilteredNuclei|AreaShape_SpatialMoment_0_0,FilteredNuclei|AreaShape_SpatialMoment_0_1,FilteredNuclei|AreaShape_SpatialMoment_1_2,FilteredNuclei|AreaShape_SpatialMoment_1_3,FilteredNuclei|AreaShape_SpatialMoment_1_0,FilteredNuclei|AreaShape_SpatialMoment_1_1,FilteredNuclei|AreaShape_CentralMoment_2_3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:objects_
    Overwrite existing files without warning?:Yes
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
MeasureTexture:[module_num:24|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
    Select images to measure:image_rescale
    Select objects to measure:FilteredNuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureImageIntensity:[module_num:25|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
    Select images to measure:image_rescale
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:FilteredNuclei
    Calculate custom percentiles:No
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
MeasureGranularity:[module_num:26|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
    Select images to measure:image_rescale
    Measure within objects?:Yes
    Select objects to measure:FilteredNuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureImageOverlap:[module_num:27|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enabled:False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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:image
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    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageQuality:[module_num:28|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectIntensity:[module_num:29|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
    Select images to measure:image_rescale
    Select objects to measure:FilteredNuclei

MeasureObjectIntensityDistribution:[module_num:30|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
    Select images to measure:image_rescale
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:FilteredNuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:31|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Intensity_PercentMaximal_image_rescale_FilteredNuclei,Image|Intensity_MaxIntensity_image_rescale_FilteredNuclei,Image|Intensity_TotalIntensity_image_rescale_FilteredNuclei,Image|Intensity_StdIntensity_image_rescale_FilteredNuclei,Image|Intensity_TotalArea_image_rescale_FilteredNuclei,Image|Intensity_UpperQuartileIntensity_image_rescale_FilteredNuclei,Image|Intensity_LowerQuartileIntensity_image_rescale_FilteredNuclei,Image|Intensity_MinIntensity_image_rescale_FilteredNuclei,Image|Intensity_MedianIntensity_image_rescale_FilteredNuclei,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:all_
    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:32|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/Users/ctr26
    Cluster root path:/Users/ctr26
